<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:AindIsoForceDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CreateTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>QuiescencePeriod</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>QuiescencePeriod</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ForceSpoutAvailability</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateSoftwareEvent">
                      <p1:EventName>QuiescencePeriod</p1:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\IsNull.bonsai" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DitheringLogic</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentForce</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LeftForce</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ForceThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RightForce</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ForceThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseOr" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DistinctUntilChanged" />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>Dither</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisPeriod</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Duration</Selector>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="7" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Switch" />
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>HasCue</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>TriggerQuiescencePeriodCue</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="7" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="11" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="16" Label="Source1" />
                  <Edge From="12" To="15" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InitiationPeriod</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>InitiationPeriod</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateSoftwareEvent">
                      <p1:EventName>InitiationPeriod</p1:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HasCue</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TriggerInitiationCue</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>AbortOnForce</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentForce</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LeftForce</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AbortOnForceThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RightForce</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisPeriod</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AbortOnForceThreshold</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="GreaterThan">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="BitwiseOr" />
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="7" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="12" Label="Source1" />
                        <Edge From="7" To="11" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source2" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AbortOnForce</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="24" Label="Source1" />
                  <Edge From="18" To="22" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>IsValid</scr:Name>
              <scr:Expression>it</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ResponsePeriod</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ResponsePeriod</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateSoftwareEvent">
                      <p1:EventName>ResponsePeriod</p1:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HasCue</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TriggerResponseCue</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ContinuousFeedbackEnabled</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisPeriod</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:HarvestAction">
                      <p2:Probability>0</p2:Probability>
                      <p2:Amount>0</p2:Amount>
                      <p2:Delay>0</p2:Delay>
                      <p2:ForceDuration>0</p2:ForceDuration>
                      <p2:UpperForceThreshold>32768</p2:UpperForceThreshold>
                      <p2:LowerForceThreshold>5000</p2:LowerForceThreshold>
                      <p2:IsOperant>false</p2:IsOperant>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="p2:HarvestAction,p2:HarvestMode">
                    <MemberName>HarvestMode</MemberName>
                    <Value>RegionOfInterest</Value>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\RoiTrialTypeResponse.bonsai" />
                  <Expression xsi:type="PropertySource" TypeArguments="p2:HarvestAction,p2:HarvestMode">
                    <MemberName>HarvestMode</MemberName>
                    <Value>Accumulation</Value>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\AccumulationTrialTypeResponse.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DisableContinuousFeedback</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ContinuousFeedbackEnabled</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="25" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source3" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="26" To="28" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Reward</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>HarvestEnv</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarvestEnv</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateSoftwareEvent">
                      <p1:EventName>HarvestActionSelected</p1:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvents</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarvestEnv</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsAction</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Action</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p2:HarvestActionLabel">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ComputeReward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarvestEnv</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>HarvestAction</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ForceSpoutAvailability</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarvestAction</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Delay</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarvestAction</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>IsOperant</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsOperant</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>WaitForLick</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarvestAction</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeToCollect</Selector>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:TimeSpanFromSeconds" />
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:Timer">
                                  <gl:DueTime>PT0S</gl:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarvestAction</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TimeToCollect</Selector>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:SubscribeWhen" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>LickEvent</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="9" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="13" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="13" Label="Source2" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="15" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsLick</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawReward.bonsai" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveReward</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsLickDeadline</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsOpenLoop</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawReward.bonsai" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>GiveReward</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarvestAction</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="12" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="12" To="21" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="14" To="19" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="26" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="26" Label="Source2" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source3" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="29" Label="Source1" />
                        <Edge From="28" To="29" Label="Source2" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarvestEnv</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsNullAction</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Action</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p2:HarvestActionLabel">
                            <Value>None</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>SkipReward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>HarvestEnv</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>ForceSpoutAvailability</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>IsAborted</scr:Name>
              <scr:Expression>!it</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:HarvestAction">
                <p2:Probability>0</p2:Probability>
                <p2:Amount>1</p2:Amount>
                <p2:Delay>0</p2:Delay>
                <p2:ForceDuration>0</p2:ForceDuration>
                <p2:UpperForceThreshold>0</p2:UpperForceThreshold>
                <p2:LowerForceThreshold>0</p2:LowerForceThreshold>
                <p2:IsOperant>true</p2:IsOperant>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InterTrialInterval</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SampleDistributionWithRngSeed.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:TimeSpanFromSeconds" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Delay">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CreateTrialOutcome</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>HarvestAction</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarvestAction</Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="HarvestAction" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GiveReward</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarvestAction</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Action</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p2:HarvestActionLabel">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>IfNoActionNull</scr:Name>
                    <scr:Expression>Item2 ? null : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Reward" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarvestAction</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Action</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p2:HarvestActionLabel">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="IsAborted" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialNumber</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TrialNumber" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:CreateTrialOutcome">
                      <p3:TrialNumber>0</p3:TrialNumber>
                      <p3:Reward xsi:nil="true" />
                      <p3:IsAborted>true</p3:IsAborted>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="18" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="18" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="18" Label="Source3" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source4" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CreateSoftwareEventInline.bonsai">
              <EventName>TrialOutcome</EventName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateSoftwareEvent">
                <p1:EventName>Trial</p1:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="17" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>