<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpDevices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpWhiteRabbitEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedCounter" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestampSource</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LickometerManipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Calibration</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LickometerManipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AindManipulator.bonsai">
              <PortName>COMx</PortName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpLoadCellsDevice.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorDevice.bonsai">
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpLickometer.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpClockGenerator.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpEnvironmentSensor.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpEnvironmentSensor</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="12" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="33" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>TriggeredCameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FrameRate.Value</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:Camera0Frequency" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:FrameAcquired">
                      <Value>FrameAcquired</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>InstantiateCamera</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TriggeredCamerasInitialized</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="SerialNumber" Selector="SerialNumber" />
                            <Property Name="ExposureTime" Selector="Exposure" />
                            <Property Name="Gain" Selector="Gain" />
                            <Property Name="Binning" Selector="Binning" />
                            <Property Name="ColorProcessing" Selector="ColorProcessing" />
                            <Property Name="Gamma" Selector="Gamma" />
                            <Property Name="PixelFormat" Selector="PixelFormat" />
                            <Property Name="AdcBitDepth" Selector="AdcBitDepth" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RegionOfInterest</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Value" Selector="X,Y,Width,Height" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="cv:Crop,p2:Rect">
                          <MemberName>RegionOfInterest</MemberName>
                          <Value>
                            <X>0</X>
                            <Y>0</Y>
                            <Width>0</Width>
                            <Height>0</Height>
                          </Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RegionOfInterest" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:AindSpinnakerCapture">
                            <spk:Index xsi:nil="true" />
                            <spk:ColorProcessing>Default</spk:ColorProcessing>
                            <p3:ExposureTime>19000</p3:ExposureTime>
                            <p3:Gain>0</p3:Gain>
                            <p3:Binning>1</p3:Binning>
                            <p3:Gamma xsi:nil="true" />
                            <p3:PixelFormat>Mono8</p3:PixelFormat>
                            <p3:RegionOfInterest>
                              <p3:X>0</p3:X>
                              <p3:Y>0</p3:Y>
                              <p3:Width>0</p3:Width>
                              <p3:Height>0</p3:Height>
                            </p3:RegionOfInterest>
                            <p3:AdcBitDepth xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FrameEvent</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="15" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="15" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source3" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="21" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="22" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>SpinnakerApiNote</Name>
                    <Text><![CDATA[For some reason, if you try to access the spinnaker API back to back, a threading error is emitted]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0.1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item2</rx:KeySelector>
                    <rx:ElementSelector>Item1</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>TriggeredCamerasStream</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>TriggeredCamerasInitialized</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TriggeredCamerasReady</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="16" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="37" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source2" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>