<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>HackyManipulandum</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ManipulandumManipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Calibration</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ManipulandumManipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:CreateAindManipulator.bonsai">
              <OperationMode>Active</OperationMode>
              <OperationLed>On</OperationLed>
              <DumpRegisters>false</DumpRegisters>
              <VisualIndicators>On</VisualIndicators>
              <Heartbeat>Enabled</Heartbeat>
              <IgnoreErrors>false</IgnoreErrors>
              <PortName>COMx</PortName>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>