<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.LicketySplit;assembly=AllenNeuralDynamics.LicketySplit"
                 xmlns:p4="clr-namespace:Harp.LoadCells;assembly=Harp.LoadCells"
                 xmlns:p5="clr-namespace:;assembly=Extensions"
                 xmlns:p6="clr-namespace:AindIsoForceDataSchema;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>RewardControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>WaterValve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
                    <rx:Name>ValveOpenTimeMs</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort0" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
                    <rx:Name>TriggerValve</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:OptionalFloatProperty">
                <bv:Value>0</bv:Value>
                <bv:HasValue>true</bv:HasValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasValue</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HasValue</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>!IsNaN</scr:Name>
              <scr:Expression>!double.IsNaN(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>GreaterThan0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Calibration.WaterValve</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>RewardToTime</scr:Name>
              <scr:Expression>((Item1 * 0.001) - Item2.Offset) / Item2.Slope </scr:Expression>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>ToMilliseconds</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>1000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>GreaterThan0</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ValveOpenTimeMs</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerValve</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasValue</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HasValue</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionCondition">
              <scr:Name>!IsNaN</scr:Name>
              <scr:Expression>!double.IsNaN(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SessionAccumulatedReward</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GiveReward</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateSoftwareEvent">
                <p2:EventName>GiveReward</p2:EventName>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SoftwareEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LickometerControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpLickometerEvents</Name>
            </Expression>
            <Expression xsi:type="p3:Parse">
              <harp:Register xsi:type="p3:TimestampedLickState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p3:LickChannels">
                <Value>Channel0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickEvent</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCamerasReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>CameraState</rx:Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput0</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput0</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CameraState</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadCells</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpLoadCellsEvents</Name>
            </Expression>
            <Expression xsi:type="p4:FilterRegister">
              <harp:FilterType>Include</harp:FilterType>
              <harp:Register xsi:type="p4:LoadCellData" />
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>TimestampedS16</harp:PayloadType>
                <harp:IsArray>true</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RawLoadCellData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoadCellsCalibration</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Calibration" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p5:ApplyLoadCellsCalibration" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CalibratedLoadCellData</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OperationControl</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Force</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ForceOperationControl</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ForceOperationControl</Name>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ParseForce</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CalibratedLoadCellData</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>settings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ForceOperationControl" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p6:ParseForce">
                      <p6:ForceOperationControl />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Switch" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CurrentForce</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TouchSensor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePokeInputFilterPayload">
                <beh:PokeInputFilter>5</beh:PokeInputFilter>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="HasFlag">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TouchSensor</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>