<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindIsoForceDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>UpdateAction</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentAction</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
            <Expression xsi:type="MemberSelector">
              <Selector>ActionUpdaters</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>CreateUpdater</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ActionUpdater</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentAction</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActionUpdater</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ActionUpdater</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Time</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>UpdatedBy</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:UpdateTargetParameterBy">
                            <Value>Time</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>CalculateTimeSinceBlockStart</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CurrentForce</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Seconds</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BlockEntryTime</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Subtract" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Trial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>UpdatedBy</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:UpdateTargetParameterBy">
                            <Value>Trial</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Reward</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>UpdatedBy</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="p1:UpdateTargetParameterBy">
                            <Value>Reward</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>WasRewarded?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TrialOutcome</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Reward.HasValue</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="DoubleProperty">
                      <Value>NaN</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RngSeed</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Random" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:UpdateHarvestAction">
                      <p2:Random />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="16" Label="Source1" />
                  <Edge From="4" To="16" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="5" To="13" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="14" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="14" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="14" Label="Source3" />
                  <Edge From="13" To="14" Label="Source4" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source3" />
                  <Edge From="16" To="19" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Propagate the null if needed</Name>
              <Text><![CDATA[Propagate the null if needed]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>