WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindIsoForceDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindIsoForceDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindIsoForceDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindIsoForceDataSchema.Rig.AindIsoForceRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindIsoForceDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.AindIsoForceTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject HarpTimestampSource

        SubscribeSubject StartExperiment
        -> Unit
        -> PublishSubject TriggerHarpReadDump

        IncludeWorkflow(Path=Extensions\HarpLoadCellsDevice.bonsai)
        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindIsoForceDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #23
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #27
        #23, #27 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #32
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #35
        #32, #35 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> Take(Count=1) => #10
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #13
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #16
    #10, #13, #16 -> Merge
    -> BehaviorSubject ExperimentState

    SubscribeSubject TrialNumber
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialNumber)
    -> MulticastSubject SoftwareEvents

GroupWorkflow HardwareChecks
    IncludeWorkflow(Path=Extensions\ProtocolValidation.bonsai) => #0
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

GroupWorkflow OperationControl
    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsNaN
          Expression: !double.IsNaN(it)
        -> Condition GreaterThan0 => #8
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #11
        #8, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #13
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #14
        #13, #14 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsNaN => #25
          Expression: !double.IsNaN(it)
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvents

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> DistinctUntilChanged
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #1
        SubscribeSubject TriggeredCamerasReady => #2
        #1, #2 -> Zip
        -> Take(Count=1)
        -> Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #13
        #10, #13 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow LoadCells
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true))
        -> PublishSubject RawLoadCellData => #3
        SubscribeSubject LoadCellsCalibration
        -> PropertyMapping(Calibration) => #5
        #3, #5 -> ApplyLoadCellsCalibration
        -> PublishSubject CalibratedLoadCellData

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=Force)
        -> Take(Count=1)
        -> AsyncSubject ForceOperationControl

        SubscribeSubject ForceOperationControl
        -> CreateObservable ParseForce
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject CalibratedLoadCellData => #3
            SubscribeSubject settings
            -> PropertyMapping(ForceOperationControl) => #5
            #3, #5 -> ParseForce(ForceOperationControl="")
            -> WorkflowOutput
        -> Switch
        -> PublishSubject CurrentForce

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Environment.BlockStatistics)
    -> Index(Operand=IntProperty(Value=0))
    -> AindIsoForceDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.BlockGenerator>)
    -> MemberSelector(Selector=TrialTemplate)
    -> AsyncSubject thisTrial

    Unit
    -> SelectMany QuiescentPeriod
        SubscribeSubject thisTrial
        -> MemberSelector(Selector=QuiescencePeriod)
        -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=QuiescentPeriod)
        -> AsyncSubject thisPeriod

        SubscribeSubject CurrentForce => #4
        SubscribeSubject thisPeriod
        -> MemberSelector(Selector=ForceThreshold)
        -> PropertyMapping(Threshold) => #7
        #4, #7 -> ThresholdJoystick
        -> MemberSelector(Selector=Value.IsAny)
        -> DistinctUntilChanged
        -> CreateObservable
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Trigger

            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=Duration)
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ClampTo0
              Expression: it > 0 ? it : 0
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S) => #9
            SubscribeSubject Trigger => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Switch
        -> BitwiseNot
        -> Condition IsBelow
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany ResponsePeriod => #8
        SubscribeSubject thisTrial
        -> MemberSelector(Selector=ResponsePeriod)
        -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ResponsePeriod)
        -> AsyncSubject thisPeriod

        Defer WaitForCrossing => #4
            SubscribeSubject CurrentForce => #0
            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=ForceThreshold)
            -> PropertyMapping(Threshold) => #3
            #0, #3 -> ThresholdJoystick
            -> Condition IsAny
                WorkflowInput Source1
                -> MemberSelector(Selector=Value.IsAny)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=CrossingOnset)
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany WaitForRelease => #5
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TriggerSample

            SubscribeSubject CurrentForce => #3
            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=ForceThreshold)
            -> PropertyMapping(Threshold) => #6
            #3, #6 -> ThresholdJoystick
            -> Condition WaitForOffset
                WorkflowInput Source1
                -> MemberSelector(Selector=Value) => #1
                SubscribeSubject TriggerSample
                -> MemberSelector(Selector=Value.TriggeredAction)
                -> PropertyMapping(Value) => #4
                #1, #4 -> Index(Operand=WorkflowProperty<AindIsoForceDataSchema.TaskLogic.Action>(Value=None))
                -> BitwiseNot
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=CrossingOffset)
            -> Take(Count=1)
            -> WorkflowOutput
        #5, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform LabelPresses
          Expression: new(Item1 as Start, Item2 as End)
        -> SelectMany ProcessCrossing
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Crossings

            SubscribeSubject Crossings
            -> MemberSelector(Selector="Start,End")
            -> ProcessCrossingOutcome
            -> AsyncSubject ProcessedCrossing

            SubscribeSubject ProcessedCrossing => #7
            SubscribeSubject ProcessedCrossing
            -> MemberSelector(Selector=Duration) => #9
            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=ForceDuration)
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> PropertyMapping(Value) => #13
            #9, #13 -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> Take(Count=1) => #15
            SubscribeSubject ProcessedCrossing
            -> MemberSelector(Selector=Action) => #17
            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=RewardedAction) => #19
            #17, #19 -> CombineLatest
            -> Equal
            -> Take(Count=1) => #22
            #7, #15, #22 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label
              Expression:
                new(
                Item1 as Crossing,
                Item2 as IsValidDuration,
                Item3 as IsRewardedAction)
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ProcessedCrossing)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition IsValid
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=IsRewardedAction) => #1
        #0 -> MemberSelector(Selector=IsValidDuration) => #2
        #1, #2 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> SelectMany Reward
        SubscribeSubject thisTrial
        -> MemberSelector(Selector=RewardPeriod)
        -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=RewardPeriod)
        -> AsyncSubject thisPeriod

        SubscribeSubject thisPeriod
        -> AindIsoForceDataSchema.TaskLogic.MatchRewardPeriod(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.OperantReward>)
        -> CreateObservable OperantReward => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisPeriod

            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=TimeToCollect)
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S)
            -> BooleanProperty(Value=false) => #9
            SubscribeSubject LickEvent
            -> BooleanProperty(Value=true) => #11
            #9, #11 -> Merge
            -> Take(Count=1)
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=OperantRewardOutcome)
            -> SelectMany Delay
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Outcome

                SubscribeSubject Outcome
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> SelectMany Delay
                    SubscribeSubject thisPeriod
                    -> MemberSelector(Selector=Delay)
                    -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform ClampTo0
                      Expression: it > 0 ? it : 0
                    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT0S, Period=PT0S)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #6
                SubscribeSubject Outcome
                -> BitwiseNot
                -> Condition => #9
                    WorkflowInput Source1
                    -> WorkflowOutput
                #6, #9 -> Merge => #10
                SubscribeSubject thisPeriod
                -> MemberSelector(Selector=Amount) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        SubscribeSubject thisPeriod
        -> AindIsoForceDataSchema.TaskLogic.MatchRewardPeriod(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.Reward>)
        -> CreateObservable PavlovianReward => #9
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisPeriod

            SubscribeSubject thisPeriod
            -> MemberSelector(Selector=Delay)
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ClampTo0
              Expression: it > 0 ? it : 0
            -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT0S, Period=PT0S)
            -> Take(Count=1) => #10
            SubscribeSubject thisPeriod => #11
            #10, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Amount)
            -> WorkflowOutput
        #6, #9 -> Merge
        -> Take(Count=1)
        -> Merge
        -> SelectMany GiveReward
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> MulticastSubject GiveReward
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> BooleanProperty(Value=true) => #11
    #8 -> Condition IsNotValid
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=IsRewardedAction) => #1
        #0 -> MemberSelector(Selector=IsValidDuration) => #2
        #1, #2 -> Zip
        -> BitwiseAnd
        -> BitwiseNot
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #13
    #11, #13 -> Merge
    -> SelectMany ITI
        SubscribeSubject thisTrial
        -> MemberSelector(Selector=InterTrialInterval)
        -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=InterTrialInterval)
        -> AsyncSubject thisPeriod

        SubscribeSubject thisPeriod
        -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it > 0 ? it : 0
        -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT0S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

Defer Logging => #14
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            Harp.Behavior.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #4
            #0, #2, #4 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Behavior)

            SubscribeSubject HarpLoadCellsEvents => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            Harp.LoadCells.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #10
            #6, #8, #10 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=LoadCells)

            SubscribeSubject HarpLickometerEvents => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #16
            #12, #14, #16 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=Lickometer)

            SubscribeSubject HarpWhiteRabbitEvents => #18
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #20
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #22
            #18, #20, #22 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=ClockGenerator)

            SubscribeSubject StepperDriverEvents => #24
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #26
            #24, #26 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: StepperDriver
                whoAmI: 1130
                firmwareVersion: "0.7"
                hardwareTargets: "1.0"
                registers:
                  ##################################
                  # Enable and disable
                  ##################################
                  EnableDriver:
                    address: 32
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Enables the driver for a specific motor. If the driver is already enabled, the driver remains enabled.
                  DisableDriver:
                    address: 33
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Disables the driver for a specific stepper motor, which prevents current from being sent to the motor or load. If the driver is already disabled, the driver remains disabled.
                  EnableEncoders:
                    address: 34
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to enable in the device.
                  DisableEncoders:
                    address: 35
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to disable in the device.
                  EnableDigitalInputs:
                    address: 36
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to enable in the device.
                  DisableDigitalInputs:
                    address: 37
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to disable in the device.

                  ##################################
                  # Configuration
                  ##################################
                  Motor0OperationMode: &opmode
                    address: 38
                    type: U8
                    access: Write
                    maskType: MotorOperationMode
                    description: Configures the operation mode for motor 0.
                  Motor1OperationMode:
                    <<: *opmode
                    address: 39
                    description: Configures the operation mode for motor 1.
                  Motor2OperationMode:
                    <<: *opmode
                    address: 40
                    description: Configures the operation mode for motor 2.
                  Motor3OperationMode:
                    <<: *opmode
                    address: 41
                    description: Configures the operation mode for motor 3.
                  Motor0MicrostepResolution: &microstep_resolution
                    address: 42
                    type: U8
                    access: Write
                    maskType: MicrostepResolution
                    description: Configures the microstep resolution for motor 0.
                  Motor1MicrostepResolution:
                    <<: *microstep_resolution
                    address: 43
                    description: Configures the microstep resolution for motor 1.
                  Motor2MicrostepResolution:
                    <<: *microstep_resolution
                    address: 44
                    description: Configures the microstep resolution for motor 2.
                  Motor3MicrostepResolution:
                    <<: *microstep_resolution
                    address: 45
                    description: Configures the microstep resolution for motor 3.

                  Motor0MaximumRunCurrent: &maxcurrent
                    address: 46
                    minValue: 0.139
                    maxValue: 2.1
                    defaultValue: 0.2
                    type: Float
                    access: Write
                    description: Configures the maximum run RMS current per phase for motor 0.
                  Motor1MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 47
                    description: Configures the maximum run RMS current per phase for motor 1.
                  Motor2MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 48
                    description: Configures the maximum run RMS current per phase for motor 2.
                  Motor3MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 49
                    description: Configures the maximum run RMS current per phase for motor 3.

                  Motor0HoldCurrentReduction: &currentreduction
                    address: 50
                    type: U8
                    access: Write
                    maskType: HoldCurrentReduction
                    description: Configures the hold current reduction for motor 0.
                  Motor1HoldCurrentReduction:
                    <<: *currentreduction
                    address: 51
                    description: Configures the hold current reduction for motor 1.
                  Motor2HoldCurrentReduction:
                    <<: *currentreduction
                    address: 52
                    description: Configures the hold current reduction for motor 2.
                  Motor3HoldCurrentReduction:
                    <<: *currentreduction
                    address: 53
                    description: Configures the hold current reduction for motor 3.

                  Motor0StepInterval: &nominalinterval
                    address: 54
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 250
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 0.
                  Motor1StepInterval:
                    <<: *nominalinterval
                    address: 55
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 1.
                  Motor2StepInterval:
                    <<: *nominalinterval
                    address: 56
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 2.
                  Motor3StepInterval:
                    <<: *nominalinterval
                    address: 57
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 3.

                  Motor0MaximumStepInterval: &maxinterval
                    address: 58
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 2000
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 0.
                  Motor1MaximumStepInterval:
                    <<: *maxinterval
                    address: 59
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 1.
                  Motor2MaximumStepInterval:
                    <<: *maxinterval
                    address: 60
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 2.
                  Motor3MaximumStepInterval:
                    <<: *maxinterval
                    address: 61
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 3.

                  Motor0StepAccelerationInterval: &accperiod
                    address: 62
                    minValue: 2
                    maxValue: 2000
                    defaultValue: 10
                    type: U16
                    access: Write
                    description: Configures the acceleration for motor 0. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor1StepAccelerationInterval:
                    <<: *accperiod
                    address: 63
                    description: Configures the acceleration for motor 1. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor2StepAccelerationInterval:
                    <<: *accperiod
                    address: 64
                    description: Configures the acceleration for motor 2. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor3StepAccelerationInterval:
                    <<: *accperiod
                    address: 65
                    description: Configures the acceleration for motor 3. The time between step pulses is decreased by this value when accelerating and increased when decelerating.

                  EncoderMode:
                    address: 66
                    type: U8
                    access: Write
                    maskType: EncoderModeConfig
                    description: Configures the operation mode of the quadrature encoder.
                  EncoderSamplingRate:
                    address: 67
                    type: U8
                    access: Write
                    maskType: EncoderSamplingRateConfig
                    description: Configures the sampling rate of the quadrature encoder event.

                  Input0OpMode: &input_mode
                    address: 68
                    type: U8
                    access: Write
                    maskType: InputOpModeConfig
                    description: Configures the operation mode for digital input 0.
                  Input1OpMode:
                    <<: *input_mode
                    address: 69
                    description: Configures the operation mode for digital input 1.
                  Input2OpMode:
                    <<: *input_mode
                    address: 70
                    description: Configures the operation mode for digital input 2.
                  Input3OpMode:
                    <<: *input_mode
                    address: 71
                    description: Configures the operation mode for digital input 3.

                  InterlockEnabled:
                    address: 72
                    type: U8
                    access: Write
                    maskType: InterlockEnabledConfig
                    description: Configures the external interlock connector state required for the device to be enabled.

                  AccumulatedStepsSamplingRate:
                    address: 73
                    type: U8
                    access: Write
                    maskType: AccumulatedStepsSamplingRateConfig
                    description: Configures the dispatch rate of the accumulated steps event.

                  ##################################
                  # Events
                  ##################################
                  MotorStopped:
                    address: 74
                    type: U8
                    access: Event
                    description: Emitted when any of the motors stops.
                    payloadSpec:
                      State:
                        description: Specifies which motors are currently stopped.
                        maskType: StepperMotors
                        mask: 0x0F
                      Changed:
                        description: Specifies which motor just stopped.
                        maskType: StepperMotors
                        mask: 0xF0
                  MotorOverVoltageDetection:
                    address: 75
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor where the over voltage detection and protection mechanism occurred, which can happen when the there's a quick deceleration from a high velocity or when the motor stalls (not implemented).
                  MotorRaisedError:
                    address: 76
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor that triggered the error which can be happen in case of short-circuit or driver temperature above 165 degrees celsius.

                  Encoders:
                    address: 77
                    type: S16
                    length: 3
                    access: [Event, Write]
                    description: Contains the quadrature encoder readings.
                    payloadSpec:
                      Encoder0:
                        offset: 0
                        description: The quadrature counter on port ENC 0.
                      Encoder1:
                        offset: 1
                        description: The quadrature counter on port ENC 1.
                      Encoder2:
                        offset: 2
                        description: The quadrature counter on port ENC 2.

                  DigitalInputState:
                    address: 78
                    access: Event
                    type: U8
                    maskType: DigitalInputStates
                    description: Reflects the state of the digital input lines.

                  DeviceState:
                    address: 79
                    type: U8
                    access: Event
                    maskType: DeviceStateMode
                    description: Contains the state of the device.

                  ##################################
                  # Movement control
                  ##################################

                  MoveRelative:
                    address: 80
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors by the number of steps written in this array register and set the direction according to the value's signal. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the number of steps used to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the number of steps used to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the number of steps used to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the number of steps used to move motor 3.

                  Motor0MoveRelative: &motorsteps
                    address: 81
                    type: S32
                    access: Write
                    description: Moves motor 0 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor1MoveRelative:
                    <<: *motorsteps
                    address: 82
                    description: Moves motor 1 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor2MoveRelative:
                    <<: *motorsteps
                    address: 83
                    description: Moves motor 2 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor3MoveRelative:
                    <<: *motorsteps
                    address: 84
                    description: Moves motor 3 by the number of steps written in this register and set the direction according to the value's signal.

                  MoveAbsolute:
                    address: 85
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors to the absolute position written in this array register. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the absolute position to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the absolute position to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the absolute position to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the absolute position to move motor 3.

                  Motor0MoveAbsolute: &motorabsolutesteps
                    address: 86
                    type: S32
                    access: Write
                    description: Moves motor 0 to the absolute position written in this register.
                  Motor1MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 87
                    description: Moves motor 1 to the absolute position written in this register.
                  Motor2MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 88
                    description: Moves motor 2 to the absolute position written in this register.
                  Motor3MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 89
                    description: Moves motor 3 to the absolute position written in this register.

                  AccumulatedSteps:
                    address: 90
                    type: S32
                    length: 4
                    access: [Event, Write]
                    description: Contains the accumulated steps of all motors. Write a value to set the accumulated steps. An event will be emitted with a dispatch rate defined in AccumulatedStepsSamplingRate.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the accumulated steps of motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the accumulated steps of motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the accumulated steps of motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the accumulated steps of motor 3.

                  Mortor0AccumulatedSteps: &motorsaccumulatedsteps
                    address: 91
                    type: S32
                    access: Write
                    description: Contains the accumulated number of steps of motor 0. Write a value to set the current number of accumulated steps.
                  Mortor1AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 92
                    description: Contains the accumulated number of steps of motor 1. Write a value to set the current number of accumulated steps.
                  Mortor2AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 93
                    description: Contains the accumulated number of steps of motor 2. Write a value to set the current number of accumulated steps.
                  Mortor3AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 94
                    description: Contains the accumulated number of steps of motor 3. Write a value to set the current number of accumulated steps.

                  MaxPosition:
                    address: 95
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the positive movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MaxPosition: &motorsmaxsteps
                    address: 96
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MaxPosition:
                    <<: *motorsmaxsteps
                    address: 97
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MaxPosition:
                    <<: *motorsmaxsteps
                    address: 98
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MaxPosition:
                    <<: *motorsmaxsteps
                    address: 99
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  MinPosition:
                    address: 100
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the negative movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MinPosition: &motorsminsteps
                    address: 101
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MinPosition:
                    <<: *motorsminsteps
                    address: 102
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MinPosition:
                    <<: *motorsminsteps
                    address: 103
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MinPosition:
                    <<: *motorsminsteps
                    address: 104
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  StepRelative:
                    address: 105
                    type: S32
                    length: 4
                    access: Write
                    description: Starts the movement of all motors with the step interval defined by this array. The value's signal defines the direction.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Starts the movement of motor 0 with the step interval defined by this register. The value's signal defines the direction.
                      Motor1:
                        offset: 1
                        description: Starts the movement of motor 1 with the step interval defined by this register. The value's signal defines the direction.
                      Motor2:
                        offset: 2
                        description: Starts the movement of motor 2 with the step interval defined by this register. The value's signal defines the direction.
                      Motor3:
                        offset: 3
                        description: Starts the movement of motor 3 with the step interval defined by this register. The value's signal defines the direction.

                  Motor0StepRelative: &immediatesteps
                    address: 106
                    type: S32
                    access: Write
                    description: Starts the movement of motor 0 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor1StepRelative:
                    <<: *immediatesteps
                    address: 107
                    description: Starts the movement of motor 1 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor2StepRelative:
                    <<: *immediatesteps
                    address: 108
                    description: Starts the movement of motor 2 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor3StepRelative:
                    <<: *immediatesteps
                    address: 109
                    description: Starts the movement of motor 3 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.

                  ##################################
                  # Actions
                  ##################################
                  StopMotors:
                    address: 110
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Stops the motors selected in the bit-mask immediately.
                  ResetMotors:
                    address: 111
                    type: U8
                    access: Write
                    visibility: private
                    maskType: StepperMotors
                    description: Resets the internal motor driver which also clears any eventual error (not implemented).
                  ResetEncoders:
                    address: 112
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Resets the encoder.

                  ##################################
                  # Reserved
                  ##################################
                  Reserved0: &reserved
                    address: 113
                    type: U8
                    access: Write
                    visibility: private
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 0.
                  Reserved1:
                    <<: *reserved
                    address: 114
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 1.
                  Reserved2:
                    <<: *reserved
                    address: 115
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 2.
                  Reserved3:
                    <<: *reserved
                    address: 116
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 3.
                  Reserved4:
                    <<: *reserved
                    address: 117
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 0.
                  Reserved5:
                    <<: *reserved
                    address: 118
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 1.
                  Reserved6:
                    <<: *reserved
                    address: 119
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 2.
                  Reserved7:
                    <<: *reserved
                    address: 120
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 3.

                  ##################################
                  # Reserved block
                  ##################################
                  Reserved8: &reserved_unused
                    address: 121
                    visibility: private
                    type: U8
                    access: Read
                    description: Reserved register.
                  Reserved9:
                    <<: *reserved_unused
                    address: 122
                  Reserved10:
                    <<: *reserved_unused
                    address: 123
                  Reserved11:
                    <<: *reserved_unused
                    address: 124
                  Reserved12:
                    <<: *reserved_unused
                    address: 125
                  Reserved13:
                    <<: *reserved_unused
                    address: 126
                  Reserved14:
                    <<: *reserved_unused
                    address: 127
                  Reserved15:
                    <<: *reserved_unused
                    address: 128
                  Reserved16:
                    <<: *reserved_unused
                    address: 129

                  ##################################
                  # Quick movement
                  ##################################
                  TriggerQuickMovement:
                    address: 130
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Triggers the quick movement in the correspondent motor with the currently configured settings.
                  Motor1QuickMovementPulseDistance: &quickmovement_pulsedistance
                    address: 131
                    type: Float
                    access: Write
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementPulseDistance:
                    <<: *quickmovement_pulsedistance
                    address: 132
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 2.
                  Motor1QuickMovementNominalSpeed: &quickmovement_nominalspeed
                    address: 133
                    type: Float
                    access: Write
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementNominalSpeed:
                    <<: *quickmovement_nominalspeed
                    address: 134
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementInitialSpeed: &quickmovement_initialspeed
                    address: 135
                    type: Float
                    access: Write
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementInitialSpeed:
                    <<: *quickmovement_initialspeed
                    address: 136
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementAcceleration: &quickmovement_acceleration
                    address: 137
                    type: Float
                    access: Write
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 1.
                  Motor2QuickMovementAcceleration:
                    <<: *quickmovement_acceleration
                    address: 138
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 2.
                  Motor1QuickMovementDistance: &quickmovement_distance
                    address: 139
                    type: Float
                    access: Write
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementDistance:
                    <<: *quickmovement_distance
                    address: 140
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.

                ##################################
                # Bit masks
                ##################################
                bitMasks:
                  StepperMotors:
                    description: Specifies the index of each motor.
                    bits:
                      Motor0: 0x01
                      Motor1: 0x02
                      Motor2: 0x04
                      Motor3: 0x08
                  QuadratureEncoders:
                    description: Specifies the index of each motor.
                    bits:
                      Encoder0: 0x01
                      Encoder1: 0x02
                      Encoder2: 0x04
                  DigitalInputs:
                    description: Specifies the available digital input lines.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                  DigitalInputStates:
                    description: Specifies the state of the port and digital input line that changed.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                      Input0Changed: 0x10
                      Input1Changed: 0x20
                      Input2Changed: 0x40
                      Input3Changed: 0x80
                ##################################
                # Group masks
                ##################################
                groupMasks:
                  EncoderModeConfig:
                    description: Specifies the type of reading made from the quadrature QuadratureEncoders.
                    values:
                      Position: 0
                      Displacement: 1
                  EncoderSamplingRateConfig:
                    description: Specifies the rate of the events from the quadrature QuadratureEncoders.
                    values:
                      Rate100Hz: 0
                      Rate200Hz: 1
                      Rate250Hz: 2
                      Rate500Hz: 3
                  MotorOperationMode:
                    description: Specifies the motor operation mode.
                    values:
                      QuietMode: 0
                      DynamicMovements: 1
                  MicrostepResolution:
                    description: Specifies the microstep resolution for each step pulse.
                    values:
                      Microstep8: 0
                      Microstep16: 1
                      Microstep32: 2
                      Microstep64: 3
                  HoldCurrentReduction:
                    description: Specifies the hold current reduction.
                    values:
                      ReductionTo50Percent: 0
                      ReductionTo25Percent: 1
                      ReductionTo12Percent: 2
                      NoReduction: 3
                  InputOpModeConfig:
                    description: Specifies the inputs operation mode.
                    values:
                      EventOnly: 0x0
                      StopMotor0OnRising: 0x10
                      StopMotor1OnRising: 0x11
                      StopMotor2OnRising: 0x12
                      StopMotor3OnRising: 0x13
                      StopMotor0OnFalling: 0x20
                      StopMotor1OnFalling: 0x21
                      StopMotor2OnFalling: 0x22
                      StopMotor3OnFalling: 0x23
                  TriggerConfig:
                    description: Specifies the input trigger configuration.
                    values:
                      FallingEdge: 0
                      RisingEdge: 1
                  InterlockEnabledConfig:
                    description: Specifies the external connector state that enables the device.
                    values:
                      Closed: 0
                      Open: 1
                  AccumulatedStepsSamplingRateConfig:
                    description: Specifies the rate of the accumulated steps events.
                    values:
                      Disabled: 0
                      Rate10Hz: 1
                      Rate50Hz: 2
                      Rate100Hz: 3
                  DeviceStateMode:
                    description: Specifies the current state of the device.
                    values:
                      Disabled: 0
                      Enabled: 1
              Modality=Behavior
              DeviceName=StepperDriver

            SubscribeSubject HarpEnvironmentSensorEvents => #28
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #30
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #32
            #28, #30, #32 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=EnvironmentSensor)

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            Harp.Behavior.GetDeviceMetadata
            -> PropertyMapping(DeviceMetadata) => #10
            #6, #8, #10 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Behavior)

            SubscribeSubject StepperDriverCommands => #12
            SubscribeSubject HarpSeconds => #13
            #12, #13 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #17
            #15, #17 -> IncludeWorkflow
              Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
              DeviceMetadata:
                %YAML 1.1
                ---
                # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
                device: StepperDriver
                whoAmI: 1130
                firmwareVersion: "0.7"
                hardwareTargets: "1.0"
                registers:
                  ##################################
                  # Enable and disable
                  ##################################
                  EnableDriver:
                    address: 32
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Enables the driver for a specific motor. If the driver is already enabled, the driver remains enabled.
                  DisableDriver:
                    address: 33
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Disables the driver for a specific stepper motor, which prevents current from being sent to the motor or load. If the driver is already disabled, the driver remains disabled.
                  EnableEncoders:
                    address: 34
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to enable in the device.
                  DisableEncoders:
                    address: 35
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Specifies a set of port quadrature counters to disable in the device.
                  EnableDigitalInputs:
                    address: 36
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to enable in the device.
                  DisableDigitalInputs:
                    address: 37
                    type: U8
                    access: Write
                    maskType: DigitalInputs
                    description: Specifies a set of digital inputs to disable in the device.

                  ##################################
                  # Configuration
                  ##################################
                  Motor0OperationMode: &opmode
                    address: 38
                    type: U8
                    access: Write
                    maskType: MotorOperationMode
                    description: Configures the operation mode for motor 0.
                  Motor1OperationMode:
                    <<: *opmode
                    address: 39
                    description: Configures the operation mode for motor 1.
                  Motor2OperationMode:
                    <<: *opmode
                    address: 40
                    description: Configures the operation mode for motor 2.
                  Motor3OperationMode:
                    <<: *opmode
                    address: 41
                    description: Configures the operation mode for motor 3.
                  Motor0MicrostepResolution: &microstep_resolution
                    address: 42
                    type: U8
                    access: Write
                    maskType: MicrostepResolution
                    description: Configures the microstep resolution for motor 0.
                  Motor1MicrostepResolution:
                    <<: *microstep_resolution
                    address: 43
                    description: Configures the microstep resolution for motor 1.
                  Motor2MicrostepResolution:
                    <<: *microstep_resolution
                    address: 44
                    description: Configures the microstep resolution for motor 2.
                  Motor3MicrostepResolution:
                    <<: *microstep_resolution
                    address: 45
                    description: Configures the microstep resolution for motor 3.

                  Motor0MaximumRunCurrent: &maxcurrent
                    address: 46
                    minValue: 0.139
                    maxValue: 2.1
                    defaultValue: 0.2
                    type: Float
                    access: Write
                    description: Configures the maximum run RMS current per phase for motor 0.
                  Motor1MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 47
                    description: Configures the maximum run RMS current per phase for motor 1.
                  Motor2MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 48
                    description: Configures the maximum run RMS current per phase for motor 2.
                  Motor3MaximumRunCurrent:
                    <<: *maxcurrent
                    address: 49
                    description: Configures the maximum run RMS current per phase for motor 3.

                  Motor0HoldCurrentReduction: &currentreduction
                    address: 50
                    type: U8
                    access: Write
                    maskType: HoldCurrentReduction
                    description: Configures the hold current reduction for motor 0.
                  Motor1HoldCurrentReduction:
                    <<: *currentreduction
                    address: 51
                    description: Configures the hold current reduction for motor 1.
                  Motor2HoldCurrentReduction:
                    <<: *currentreduction
                    address: 52
                    description: Configures the hold current reduction for motor 2.
                  Motor3HoldCurrentReduction:
                    <<: *currentreduction
                    address: 53
                    description: Configures the hold current reduction for motor 3.

                  Motor0StepInterval: &nominalinterval
                    address: 54
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 250
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 0.
                  Motor1StepInterval:
                    <<: *nominalinterval
                    address: 55
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 1.
                  Motor2StepInterval:
                    <<: *nominalinterval
                    address: 56
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 2.
                  Motor3StepInterval:
                    <<: *nominalinterval
                    address: 57
                    description: Configures the time between step motor pulses (us) when running at nominal speed for motor 3.

                  Motor0MaximumStepInterval: &maxinterval
                    address: 58
                    minValue: 100
                    maxValue: 20000
                    defaultValue: 2000
                    type: U16
                    access: Write
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 0.
                  Motor1MaximumStepInterval:
                    <<: *maxinterval
                    address: 59
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 1.
                  Motor2MaximumStepInterval:
                    <<: *maxinterval
                    address: 60
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 2.
                  Motor3MaximumStepInterval:
                    <<: *maxinterval
                    address: 61
                    description: Configures the time between step motor pulses (us) used when starting or stopping a movement for motor 3.

                  Motor0StepAccelerationInterval: &accperiod
                    address: 62
                    minValue: 2
                    maxValue: 2000
                    defaultValue: 10
                    type: U16
                    access: Write
                    description: Configures the acceleration for motor 0. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor1StepAccelerationInterval:
                    <<: *accperiod
                    address: 63
                    description: Configures the acceleration for motor 1. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor2StepAccelerationInterval:
                    <<: *accperiod
                    address: 64
                    description: Configures the acceleration for motor 2. The time between step pulses is decreased by this value when accelerating and increased when decelerating.
                  Motor3StepAccelerationInterval:
                    <<: *accperiod
                    address: 65
                    description: Configures the acceleration for motor 3. The time between step pulses is decreased by this value when accelerating and increased when decelerating.

                  EncoderMode:
                    address: 66
                    type: U8
                    access: Write
                    maskType: EncoderModeConfig
                    description: Configures the operation mode of the quadrature encoder.
                  EncoderSamplingRate:
                    address: 67
                    type: U8
                    access: Write
                    maskType: EncoderSamplingRateConfig
                    description: Configures the sampling rate of the quadrature encoder event.

                  Input0OpMode: &input_mode
                    address: 68
                    type: U8
                    access: Write
                    maskType: InputOpModeConfig
                    description: Configures the operation mode for digital input 0.
                  Input1OpMode:
                    <<: *input_mode
                    address: 69
                    description: Configures the operation mode for digital input 1.
                  Input2OpMode:
                    <<: *input_mode
                    address: 70
                    description: Configures the operation mode for digital input 2.
                  Input3OpMode:
                    <<: *input_mode
                    address: 71
                    description: Configures the operation mode for digital input 3.

                  InterlockEnabled:
                    address: 72
                    type: U8
                    access: Write
                    maskType: InterlockEnabledConfig
                    description: Configures the external interlock connector state required for the device to be enabled.

                  AccumulatedStepsSamplingRate:
                    address: 73
                    type: U8
                    access: Write
                    maskType: AccumulatedStepsSamplingRateConfig
                    description: Configures the dispatch rate of the accumulated steps event.

                  ##################################
                  # Events
                  ##################################
                  MotorStopped:
                    address: 74
                    type: U8
                    access: Event
                    description: Emitted when any of the motors stops.
                    payloadSpec:
                      State:
                        description: Specifies which motors are currently stopped.
                        maskType: StepperMotors
                        mask: 0x0F
                      Changed:
                        description: Specifies which motor just stopped.
                        maskType: StepperMotors
                        mask: 0xF0
                  MotorOverVoltageDetection:
                    address: 75
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor where the over voltage detection and protection mechanism occurred, which can happen when the there's a quick deceleration from a high velocity or when the motor stalls (not implemented).
                  MotorRaisedError:
                    address: 76
                    type: U8
                    access: Event
                    maskType: StepperMotors
                    description: Contains a bit mask specifying the motor that triggered the error which can be happen in case of short-circuit or driver temperature above 165 degrees celsius.

                  Encoders:
                    address: 77
                    type: S16
                    length: 3
                    access: [Event, Write]
                    description: Contains the quadrature encoder readings.
                    payloadSpec:
                      Encoder0:
                        offset: 0
                        description: The quadrature counter on port ENC 0.
                      Encoder1:
                        offset: 1
                        description: The quadrature counter on port ENC 1.
                      Encoder2:
                        offset: 2
                        description: The quadrature counter on port ENC 2.

                  DigitalInputState:
                    address: 78
                    access: Event
                    type: U8
                    maskType: DigitalInputStates
                    description: Reflects the state of the digital input lines.

                  DeviceState:
                    address: 79
                    type: U8
                    access: Event
                    maskType: DeviceStateMode
                    description: Contains the state of the device.

                  ##################################
                  # Movement control
                  ##################################

                  MoveRelative:
                    address: 80
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors by the number of steps written in this array register and set the direction according to the value's signal. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the number of steps used to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the number of steps used to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the number of steps used to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the number of steps used to move motor 3.

                  Motor0MoveRelative: &motorsteps
                    address: 81
                    type: S32
                    access: Write
                    description: Moves motor 0 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor1MoveRelative:
                    <<: *motorsteps
                    address: 82
                    description: Moves motor 1 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor2MoveRelative:
                    <<: *motorsteps
                    address: 83
                    description: Moves motor 2 by the number of steps written in this register and set the direction according to the value's signal.
                  Motor3MoveRelative:
                    <<: *motorsteps
                    address: 84
                    description: Moves motor 3 by the number of steps written in this register and set the direction according to the value's signal.

                  MoveAbsolute:
                    address: 85
                    type: S32
                    length: 4
                    access: Write
                    description: Moves all motors to the absolute position written in this array register. If a motor is disable, the user should set the value to 0.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the absolute position to move motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the absolute position to move motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the absolute position to move motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the absolute position to move motor 3.

                  Motor0MoveAbsolute: &motorabsolutesteps
                    address: 86
                    type: S32
                    access: Write
                    description: Moves motor 0 to the absolute position written in this register.
                  Motor1MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 87
                    description: Moves motor 1 to the absolute position written in this register.
                  Motor2MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 88
                    description: Moves motor 2 to the absolute position written in this register.
                  Motor3MoveAbsolute:
                    <<: *motorabsolutesteps
                    address: 89
                    description: Moves motor 3 to the absolute position written in this register.

                  AccumulatedSteps:
                    address: 90
                    type: S32
                    length: 4
                    access: [Event, Write]
                    description: Contains the accumulated steps of all motors. Write a value to set the accumulated steps. An event will be emitted with a dispatch rate defined in AccumulatedStepsSamplingRate.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Contains the accumulated steps of motor 0.
                      Motor1:
                        offset: 1
                        description: Contains the accumulated steps of motor 1.
                      Motor2:
                        offset: 2
                        description: Contains the accumulated steps of motor 2.
                      Motor3:
                        offset: 3
                        description: Contains the accumulated steps of motor 3.

                  Mortor0AccumulatedSteps: &motorsaccumulatedsteps
                    address: 91
                    type: S32
                    access: Write
                    description: Contains the accumulated number of steps of motor 0. Write a value to set the current number of accumulated steps.
                  Mortor1AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 92
                    description: Contains the accumulated number of steps of motor 1. Write a value to set the current number of accumulated steps.
                  Mortor2AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 93
                    description: Contains the accumulated number of steps of motor 2. Write a value to set the current number of accumulated steps.
                  Mortor3AccumulatedSteps:
                    <<: *motorsaccumulatedsteps
                    address: 94
                    description: Contains the accumulated number of steps of motor 3. Write a value to set the current number of accumulated steps.

                  MaxPosition:
                    address: 95
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the positive movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MaxPosition: &motorsmaxsteps
                    address: 96
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MaxPosition:
                    <<: *motorsmaxsteps
                    address: 97
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MaxPosition:
                    <<: *motorsmaxsteps
                    address: 98
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MaxPosition:
                    <<: *motorsmaxsteps
                    address: 99
                    description: Specifies the limit of the accumulated steps for the positive movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  MinPosition:
                    address: 100
                    type: S32
                    length: 4
                    access: Write
                    description: Defines the limit of the accumulated steps for the negative movement of all motors. The device will not let the motors move further than this value. A value equal to 0 will disable the limits.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Defines the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value.
                      Motor1:
                        offset: 1
                        description: Defines the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value.
                      Motor2:
                        offset: 2
                        description: Defines the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value.
                      Motor3:
                        offset: 3
                        description: Defines the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value.

                  Motor0MinPosition: &motorsminsteps
                    address: 101
                    type: S32
                    access: Write
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 0. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor1MinPosition:
                    <<: *motorsminsteps
                    address: 102
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 1. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor2MinPosition:
                    <<: *motorsminsteps
                    address: 103
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 2. The device will not let the motor move further than this value. A value equal to 0 disables the feature.
                  Motor3MinPosition:
                    <<: *motorsminsteps
                    address: 104
                    description: Specifies the limit of the accumulated steps for the negative movement of motor 3. The device will not let the motor move further than this value. A value equal to 0 disables the feature.

                  StepRelative:
                    address: 105
                    type: S32
                    length: 4
                    access: Write
                    description: Starts the movement of all motors with the step interval defined by this array. The value's signal defines the direction.
                    payloadSpec:
                      Motor0:
                        offset: 0
                        description: Starts the movement of motor 0 with the step interval defined by this register. The value's signal defines the direction.
                      Motor1:
                        offset: 1
                        description: Starts the movement of motor 1 with the step interval defined by this register. The value's signal defines the direction.
                      Motor2:
                        offset: 2
                        description: Starts the movement of motor 2 with the step interval defined by this register. The value's signal defines the direction.
                      Motor3:
                        offset: 3
                        description: Starts the movement of motor 3 with the step interval defined by this register. The value's signal defines the direction.

                  Motor0StepRelative: &immediatesteps
                    address: 106
                    type: S32
                    access: Write
                    description: Starts the movement of motor 0 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor1StepRelative:
                    <<: *immediatesteps
                    address: 107
                    description: Starts the movement of motor 1 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor2StepRelative:
                    <<: *immediatesteps
                    address: 108
                    description: Starts the movement of motor 2 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.
                  Motor3StepRelative:
                    <<: *immediatesteps
                    address: 109
                    description: Starts the movement of motor 3 with the step interval defined by this register, disregarding the acceleration protocol. The sign of the value specifies the direction.

                  ##################################
                  # Actions
                  ##################################
                  StopMotors:
                    address: 110
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Stops the motors selected in the bit-mask immediately.
                  ResetMotors:
                    address: 111
                    type: U8
                    access: Write
                    visibility: private
                    maskType: StepperMotors
                    description: Resets the internal motor driver which also clears any eventual error (not implemented).
                  ResetEncoders:
                    address: 112
                    type: U8
                    access: Write
                    maskType: QuadratureEncoders
                    description: Resets the encoder.

                  ##################################
                  # Reserved
                  ##################################
                  Reserved0: &reserved
                    address: 113
                    type: U8
                    access: Write
                    visibility: private
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 0.
                  Reserved1:
                    <<: *reserved
                    address: 114
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 1.
                  Reserved2:
                    <<: *reserved
                    address: 115
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 2.
                  Reserved3:
                    <<: *reserved
                    address: 116
                    description: Contains the CFG configuration pins of the TMC2210 driver that controls motor 3.
                  Reserved4:
                    <<: *reserved
                    address: 117
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 0.
                  Reserved5:
                    <<: *reserved
                    address: 118
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 1.
                  Reserved6:
                    <<: *reserved
                    address: 119
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 2.
                  Reserved7:
                    <<: *reserved
                    address: 120
                    visibility: private
                    description: Contains the raw data of the digital potentiometer that controls current limit of motor 3.

                  ##################################
                  # Reserved block
                  ##################################
                  Reserved8: &reserved_unused
                    address: 121
                    visibility: private
                    type: U8
                    access: Read
                    description: Reserved register.
                  Reserved9:
                    <<: *reserved_unused
                    address: 122
                  Reserved10:
                    <<: *reserved_unused
                    address: 123
                  Reserved11:
                    <<: *reserved_unused
                    address: 124
                  Reserved12:
                    <<: *reserved_unused
                    address: 125
                  Reserved13:
                    <<: *reserved_unused
                    address: 126
                  Reserved14:
                    <<: *reserved_unused
                    address: 127
                  Reserved15:
                    <<: *reserved_unused
                    address: 128
                  Reserved16:
                    <<: *reserved_unused
                    address: 129

                  ##################################
                  # Quick movement
                  ##################################
                  TriggerQuickMovement:
                    address: 130
                    type: U8
                    access: Write
                    maskType: StepperMotors
                    description: Triggers the quick movement in the correspondent motor with the currently configured settings.
                  Motor1QuickMovementPulseDistance: &quickmovement_pulsedistance
                    address: 131
                    type: Float
                    access: Write
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementPulseDistance:
                    <<: *quickmovement_pulsedistance
                    address: 132
                    description: Sets the single pulse distance for a quick movement, in millimeters, for the Motor 2.
                  Motor1QuickMovementNominalSpeed: &quickmovement_nominalspeed
                    address: 133
                    type: Float
                    access: Write
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementNominalSpeed:
                    <<: *quickmovement_nominalspeed
                    address: 134
                    description: Sets the target speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementInitialSpeed: &quickmovement_initialspeed
                    address: 135
                    type: Float
                    access: Write
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 1.
                  Motor2QuickMovementInitialSpeed:
                    <<: *quickmovement_initialspeed
                    address: 136
                    description: Sets the initial speed for a quick movement, in millimeters per second, for the Motor 2.
                  Motor1QuickMovementAcceleration: &quickmovement_acceleration
                    address: 137
                    type: Float
                    access: Write
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 1.
                  Motor2QuickMovementAcceleration:
                    <<: *quickmovement_acceleration
                    address: 138
                    description: Sets the acceleration for a quick movement, in millimeters per second^2, for the Motor 2.
                  Motor1QuickMovementDistance: &quickmovement_distance
                    address: 139
                    type: Float
                    access: Write
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.
                  Motor2QuickMovementDistance:
                    <<: *quickmovement_distance
                    address: 140
                    description: Sets the travel distance of a quick movement, in millimeters, for the Motor 1.

                ##################################
                # Bit masks
                ##################################
                bitMasks:
                  StepperMotors:
                    description: Specifies the index of each motor.
                    bits:
                      Motor0: 0x01
                      Motor1: 0x02
                      Motor2: 0x04
                      Motor3: 0x08
                  QuadratureEncoders:
                    description: Specifies the index of each motor.
                    bits:
                      Encoder0: 0x01
                      Encoder1: 0x02
                      Encoder2: 0x04
                  DigitalInputs:
                    description: Specifies the available digital input lines.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                  DigitalInputStates:
                    description: Specifies the state of the port and digital input line that changed.
                    bits:
                      Input0: 0x1
                      Input1: 0x2
                      Input2: 0x4
                      Input3: 0x8
                      Input0Changed: 0x10
                      Input1Changed: 0x20
                      Input2Changed: 0x40
                      Input3Changed: 0x80
                ##################################
                # Group masks
                ##################################
                groupMasks:
                  EncoderModeConfig:
                    description: Specifies the type of reading made from the quadrature QuadratureEncoders.
                    values:
                      Position: 0
                      Displacement: 1
                  EncoderSamplingRateConfig:
                    description: Specifies the rate of the events from the quadrature QuadratureEncoders.
                    values:
                      Rate100Hz: 0
                      Rate200Hz: 1
                      Rate250Hz: 2
                      Rate500Hz: 3
                  MotorOperationMode:
                    description: Specifies the motor operation mode.
                    values:
                      QuietMode: 0
                      DynamicMovements: 1
                  MicrostepResolution:
                    description: Specifies the microstep resolution for each step pulse.
                    values:
                      Microstep8: 0
                      Microstep16: 1
                      Microstep32: 2
                      Microstep64: 3
                  HoldCurrentReduction:
                    description: Specifies the hold current reduction.
                    values:
                      ReductionTo50Percent: 0
                      ReductionTo25Percent: 1
                      ReductionTo12Percent: 2
                      NoReduction: 3
                  InputOpModeConfig:
                    description: Specifies the inputs operation mode.
                    values:
                      EventOnly: 0x0
                      StopMotor0OnRising: 0x10
                      StopMotor1OnRising: 0x11
                      StopMotor2OnRising: 0x12
                      StopMotor3OnRising: 0x13
                      StopMotor0OnFalling: 0x20
                      StopMotor1OnFalling: 0x21
                      StopMotor2OnFalling: 0x22
                      StopMotor3OnFalling: 0x23
                  TriggerConfig:
                    description: Specifies the input trigger configuration.
                    values:
                      FallingEdge: 0
                      RisingEdge: 1
                  InterlockEnabledConfig:
                    description: Specifies the external connector state that enables the device.
                    values:
                      Closed: 0
                      Open: 1
                  AccumulatedStepsSamplingRateConfig:
                    description: Specifies the rate of the accumulated steps events.
                    values:
                      Disabled: 0
                      Rate10Hz: 1
                      Rate50Hz: 2
                      Rate100Hz: 3
                  DeviceStateMode:
                    description: Specifies the current state of the device.
                    values:
                      Disabled: 0
                      Enabled: 1
              Modality=Behavior
              DeviceName=HarpCommands/StepperDriver

            SubscribeSubject HarpLoadCellsCommands => #19
            SubscribeSubject HarpSeconds => #20
            #19, #20 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #22
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #24
            Harp.LoadCells.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #26
            #22, #24, #26 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/LoadCells)

            SubscribeSubject HarpLickometerCommands => #28
            SubscribeSubject HarpSeconds => #29
            #28, #29 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #31
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #33
            AllenNeuralDynamics.LicketySplit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #35
            #31, #33, #35 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/Lickometer)

            SubscribeSubject HarpWhiteRabbitCommands => #37
            SubscribeSubject HarpSeconds => #38
            #37, #38 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #40
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #42
            AllenNeuralDynamics.WhiteRabbit.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #44
            #40, #42, #44 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=HarpCommands/ClockGenerator)

            SubscribeSubject HarpEnvironmentSensorCommands => #46
            SubscribeSubject HarpSeconds => #47
            #46, #47 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #49
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #51
            AllenNeuralDynamics.EnvironmentSensor.GetMetadata
            -> PropertyMapping(DeviceMetadata) => #53
            #49, #51, #53 -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai, DeviceMetadata="", Modality=Behavior, DeviceName=nil)

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject UpdaterEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #11
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #13
            #11, #13 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #16
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #18
            #16, #18 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #22
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #24
            #22, #24 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #27
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #29
            #27, #29 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvents

        Defer OperationControl
            StringProperty(Value=OperationControl)
            -> Take(Count=1)
            -> AsyncSubject deviceName

            SubscribeSubject CurrentForce
            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #4
              Expression:
                new(
                Seconds as Seconds,
                new(
                Value.Left as Left,
                Value.Right as Right,
                Value.Push as Push,
                Value.Pull as Pull
                ) as Force)
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #4, #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=CurrentForce, DeviceName="")

            SubscribeSubject LoadCellsCalibration
            -> Merge
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LoadCellsCalibration)
            -> MulticastSubject SoftwareEvents

        Defer Logs
            StringProperty(Value=Logs)
            -> Take(Count=1)
            -> AsyncSubject DeviceName

            GroupWorkflow ConfigSchemaLogging
                SubscribeSubject SubjectSchema
                -> AindIsoForceDataSchema.Session.SerializeToJson => #1
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #3
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #5
                #1, #3, #5 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=session_output)

                SubscribeSubject TaskLogicSchema
                -> AindIsoForceDataSchema.TaskLogic.SerializeToJson => #8
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #10
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #12
                #8, #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_output)

                SubscribeSubject RigSchema
                -> AindIsoForceDataSchema.Rig.SerializeToJson => #15
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #17
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #19
                #15, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

                SubscribeSubject RawRigSchema => #21
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #23
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #25
                #21, #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

                SubscribeSubject RawSessionSchema => #27
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #29
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #31
                #27, #29, #31 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

                SubscribeSubject RawTaskLogicSchema => #33
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #35
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #37
                #33, #35, #37 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

            GroupWorkflow Logs
                SubscribeSubject EndExperiment
                -> StringProperty(Value=ExperimentCompleted)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
                SubscribeSubject HarpTimestampSource => #3
                #2, #3 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
                -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #9
                SubscribeSubject DeviceName
                -> PropertyMapping(DeviceName) => #11
                #7, #9, #11 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=endsession)

                SubscribeSubject RuntimeLogging
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
                SubscribeSubject HarpTimestampSource
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
                #14, #16 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped
                -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #19
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #21
                SubscribeSubject DeviceName => #22
                StringProperty(Value=RuntimeLogging)
                -> Take(Count=1) => #24
                #22, #24 -> Zip
                -> Format(Format={0}/{1}, Selector="Item1,Item2")
                -> PropertyMapping(LoggerName) => #27
                #19, #21, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        IncludeWorkflow(Path=Extensions\TriggeredCameras.bonsai)
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #16
#14, #16 -> TakeUntil => #17
SubscribeSubject StartLogging => #18
#17, #18 -> SubscribeWhen

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    IncludeWorkflow(Path=Extensions\LauncherControl.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
    IncludeWorkflow(Path=Extensions\ValveGui.bonsai, Interval=PT0.5S, OpeningTimeMs=100, Repeats=200)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
    GroupWorkflow HwShortcuts
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=3, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #5
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #8
        #5, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    IntProperty(Value=0)
    -> Visualizer LoadCellControl
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #1
        SubscribeSubject CalibratingLoadCells
        -> Bonsai.Scripting.Expressions.ExpressionTransform Prompt
          Expression: it ? "Calibrating..." : "Calibrate Load Cells"
        -> PropertyMapping(Text) => #4
        #1, #4 -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text=TriggerLoadCellCalibration)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject CalibrateLoadCells
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder LoadCellCalibration(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #9
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.Parse(Register=Harp.LoadCells.TimestampedLoadCellData)
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector="Value.Channel0,Value.Channel1,Value.Channel2,Value.Channel3,Value.Channel4,Value.Channel5,Value.Channel6,Value.Channel7"
          SymbolType=None
          LineWidth=1
          CurveSettings=""
          Capacity=5000
          Min=nil
          Max=nil
        -> VisualizerMapping => #13
        #9, #13 -> Bonsai.Gui.TableLayoutPanelBuilder Calibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=1
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.1), ColumnStyle(SizeType=Percent, Width=0.9))
          RowStyles=""
          CellSpans=""
        -> VisualizerMapping
        -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #14
    #5, #7, #9, #11, #14 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

GroupWorkflow Visualizers
    IntProperty(Value=0)
    -> Visualizer VideoControllerVisualization
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it != null ? (it.Cameras.Count > 0) : false
        -> AsyncSubject TriggeredCamerasControllerExists

        SubscribeSubject RigSchema => #4
        SubscribeSubject TriggeredCamerasControllerExists
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MemberSelector(Selector=TriggeredCameraController.Cameras.Keys)
        -> Bonsai.Dsp.ConvertToArray(Depth=nil)
        -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
        -> BehaviorSubject SelectedControllerCamera
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ListBoxDataSourceVisualizer>) => #12
        SubscribeSubject SelectedControllerCamera
        -> CreateObservable GetStream
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Camera

            SubscribeSubject TriggeredCamerasStream => #3
            SubscribeSubject Camera
            -> PropertyMapping(Value) => #5
            #3, #5 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty)
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Switch
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #17
        SubscribeSubject TriggeredCamerasControllerExists
        -> PropertyMapping(Enabled, Visible) => #19
        #12, #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder VideoVisualizer
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.6), RowStyle(SizeType=Percent, Height=0.3))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
    SubscribeSubject LickEvent => #3
    -> IntProperty(Value=1) => #4
    #4, #3 -> Zip
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Item2
      ValueSelector=Item1
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Licks, Color=Blue))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>)
    -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder Lickometer(ReverseX=false, ReverseY=false, Span=20, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=0, Max=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #9
    #2, #9 -> Bonsai.Gui.TableLayoutPanelBuilder Monitoring
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=3
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.2))
      CellSpans=""
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    SubscribeSubject SoftwareEvents
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder SoftwareEvents(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #15
    #11, #15 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TriggeredCamerasReady => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Delay(DueTime=PT3S)
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    WorkflowInput Source1
    -> WorkflowOutput
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
