<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.LoadCells;assembly=Harp.LoadCells"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpLoadCellsCommands</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>33</harp:Address>
          <harp:PayloadType>S16</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="zg:RollingGraphBuilder">
        <zg:SymbolType>None</zg:SymbolType>
        <zg:LineWidth>1</zg:LineWidth>
        <zg:CurveSettings />
        <zg:Capacity xsi:nil="true" />
        <zg:Min xsi:nil="true" />
        <zg:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableEventsPayload">
          <p1:EnableEvents>LoadCellData</p1:EnableEvents>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpLoadCellsCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAcquisitionStatePayload">
          <p1:AcquisitionState>Enabled</p1:AcquisitionState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpLoadCellsCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessageType">
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ConnectionString" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Publisher">
          <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>